PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = -1.0000, -1.0000, -1.0000
  expName = Flanker_task-master
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine Instructions
    RoutineSettingsComponent Instructions
      saveStartStop = False
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    TextComponent text_Instructions
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        ในเกมนี้จะมี ลูกศร โผล่มาให้ดูบนหน้าจอ

        โดยที่ ให้ดูลูกศรตรงกลาง ว่าชี้ไปทางไหน
        แล้วให้กดปุ่มตาม เช่น

        ถ้าลูกศรตรงกลางชี้ ขวา  กดปุ่ม ขวา
        ถ้าลูกศรตรงกลางชี้ ซ้าย  กดปุ่ม ซ้าย

        แตะหน้าจอเพื่อไปฝึกเล่น
    MouseComponent mouse_Instructions
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine countdown
    RoutineSettingsComponent countdown
      saveStartStop = False
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    TextComponent text_3
      letterHeight = 0.15
      pos = (0, 0.12)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = False
      text = 3
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    TextComponent text_2
      letterHeight = 0.15
      pos = (0, 0.12)
      saveStartStop = False
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = False
      text = 2
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    TextComponent text_1
      letterHeight = 0.15
      pos = (0, 0.12)
      saveStartStop = False
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = False
      text = 1
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  Routine Fixation
    RoutineSettingsComponent Fixation
      saveStartStop = False
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    TextComponent text_Fixation
      letterHeight = 0.1
      pos = (0, 0.12)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      syncScreenRefresh = False
      text = +
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  Routine Tutorial
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    CodeComponent code_t
      Code Type = JS
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      Begin JS Routine:
        duration = Math.floor(Math.random() * 3) + 1;

        duration2 = duration+1.5;
      Each JS Frame:
        if (mouse_resp_t.isPressedIn(R_t)) {
            continueRoutine = false;
        }
        if (mouse_resp_t.isPressedIn(L_t)) {
            continueRoutine = false;
        }

        if (t >= 2.8) {
            continueRoutine = false;
        }
      End JS Routine:
        if ((mouse_resp_t.clicked_name.slice(-1)[0] === mouse_LR_t)) {
            correct = 1;
        } else {
            correct = 0;
        }
        mouse_resp_t.time = mouse_resp_t.time.slice(-1)[0];
        psychoJS.experiment.addData("mouse_resp_t.time", mouse_resp_t.time);

        mouse_resp_t.clicked_name = mouse_resp_t.clicked_name.slice(-1)[0];
        psychoJS.experiment.addData("mouse_resp_t.clicked_name", mouse_resp_t.clicked_name);

        psychoJS.experiment.addData("correct_answer", correct);

        //time = duration2;
        //psychoJS.experiment.addData('time', time);
    ImageComponent Image_t
      image [set every repeat] = $photo
      pos = (0, 0.12)
      saveStartStop = False
      size = (1.8, 1.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      syncScreenRefresh = False
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    ImageComponent R_t
      draggable = True
      image [set every repeat] = Images/R.png
      pos = (0.15, -0.27)
      saveStartStop = False
      size = (0.2,0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.8
      syncScreenRefresh = False
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    ImageComponent L_t
      image [set every repeat] = Images/L.png
      pos = (-0.15, -0.27)
      saveStartStop = False
      size = (0.2,0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.8
      syncScreenRefresh = False
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    MouseComponent mouse_resp_t
      clickable = L_t,R_t
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine Feedback
    RoutineSettingsComponent Feedback
      saveStartStop = False
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    CodeComponent code_Feedback_Tutorial
      Code Type = JS
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      Begin JS Routine:
        if ((correct === 1)) {
            feedback_text = "ถูกต้อง!";
        } else {
            if ((correct === 0)) {
                feedback_text = "ผิด!";
            }
        }
    TextComponent text_feedback_Tutorial
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      syncScreenRefresh = False
      text [set every repeat] = $feedback_text
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  Routine Instructions_2
    RoutineSettingsComponent Instructions_2
      saveStartStop = False
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    TextComponent text_Instructions_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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      text:
        เมื่อเล่นจริงจะไม่มีการบอกว่าถูกหรือผิด

        แตะหน้าจอเพื่อไปเล่นจริง
    MouseComponent mouse_Instructions_2
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine FlankerTask
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    CodeComponent code
      Code Type = JS
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      Begin JS Routine:
        duration = Math.floor(Math.random() * 3) + 1;

        duration2 = duration+1.5;
      Each JS Frame:
        if (mouse_resp.isPressedIn(R)) {
            continueRoutine = false;
        }
        if (mouse_resp.isPressedIn(L)) {
            continueRoutine = false;
        }

        if (t >= 2.8) {
            continueRoutine = false;
        }
      End JS Routine:
        if ((mouse_resp.clicked_name.slice(-1)[0] === mouse_LR)) {
            correct = 1;
        } else {
            correct = 0;
        }
        mouse_resp.time = mouse_resp.time.slice(-1)[0];
        psychoJS.experiment.addData("mouse_resp.time", mouse_resp.time);

        mouse_resp.clicked_name = mouse_resp.clicked_name.slice(-1)[0];
        psychoJS.experiment.addData("mouse_resp.clicked_name", mouse_resp.clicked_name);

        psychoJS.experiment.addData("correct_answer", correct);

        //time = duration2;
        //psychoJS.experiment.addData('time', time);
    ImageComponent Image
      image [set every repeat] = $photo
      pos = (0, 0.12)
      saveStartStop = False
      size = (1.5, 1.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      syncScreenRefresh = False
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    ImageComponent R
      image [set every repeat] = Images/R.png
      pos = (0.15, -0.27)
      saveStartStop = False
      size = (0.2,0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.8
      syncScreenRefresh = False
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    ImageComponent L
      image [set every repeat] = Images/L.png
      pos = (-0.15, -0.27)
      saveStartStop = False
      size = (0.2,0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.8
      syncScreenRefresh = False
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    MouseComponent mouse_resp
      clickable = R,L
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine End
    RoutineSettingsComponent End
      saveStartStop = False
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    TextComponent text_end
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      text = ขอบคุณสำหรับการเข้าร่วม
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    CodeComponent code_2
      Code Type = JS
      Begin JS Routine:
        // Disable downloading results to browser
        psychoJS._saveResults = 0;

        // Generate filename for results
        let filename = psychoJS._experiment._experimentName + '' + psychoJS._experiment._datetime + '.csv';

        // Extract data object from experiment
        let dataObj = psychoJS._experiment._trialsData;

        // Convert data object to CSV
        // let data = [Object.keys(dataObj[0])].concat(dataObj).map(it => {
        //     console.log(dataObj)
        //     return Object.values(it).toString()
        // }).join('\n')

        // Extract all unique keys from the JSON objects
        const allKeys = [...new Set(dataObj.flatMap(obj => Object.keys(obj)))];

        // Convert JSON to CSV format
        const csvRows = [];

        // Add header row
        csvRows.push(allKeys.join(','));

        // Add data rows
        for (const obj of dataObj) {
            const row = allKeys.map(key => obj[key] !== undefined ? `"${obj[key]}"` : '');
            csvRows.push(row.join(','));
        }

        // Change to CSV file
        const data = csvRows.join('\n');

        // Send data to OSF via DataPipe
        console.log('Saving data...');
        fetch('https://pipe.jspsych.org/api/data', {
            method: 'POST',
            headers: {
                'Content-Type': 'application/json',
                Accept: '/',
            },
            body: JSON.stringify({
                experimentID: 'Oxesazag5MIL', // ⭑ UPDATE WITH YOUR DATAPIPE EXPERIMENT ID ⭑
                filename: filename,
                data: data,
            }),
        }).then(response => response.json()).then(data => {
            // Log response and force experiment end
            console.log(data);
            quitPsychoJS();
        })
Flow
  Routine Instructions
  Routine countdown
  LoopInitiator Play_t loopType="TrialHandler"
    conditionsFile = conditions_arrows.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('condition', 'congruent_left'), ('photo', 'Images/congruent_left.png'), ('corrAns', 'left'), ('mouse_LR', 'L'), ('mouse_LR_t', 'L_t')]),
      OrderedDict([('condition', 'incongruent_left'), ('photo', 'Images/incongruent_left.png'), ('corrAns', 'left'), ('mouse_LR', 'L'), ('mouse_LR_t', 'L_t')]),
      OrderedDict([('condition', 'congruent_right'), ('photo', 'Images/congruent_right.png'), ('corrAns', 'right'), ('mouse_LR', 'R'), ('mouse_LR_t', 'R_t')]),
      OrderedDict([('condition', 'incongruent_right'), ('photo', 'Images/incongruent_right.png'), ('corrAns', 'right'), ('mouse_LR', 'R'), ('mouse_LR_t', 'R_t')])]
    Routine Fixation
    Routine Tutorial
    Routine Feedback
  LoopTerminator Play_t
  Routine Instructions_2
  Routine countdown
  LoopInitiator Play loopType="TrialHandler"
    conditionsFile = conditions_arrows.csv
    loopType = random
    nReps = 3
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    conditions:
      [OrderedDict([('condition', 'congruent_left'), ('photo', 'Images/congruent_left.png'), ('corrAns', 'left'), ('mouse_LR', 'L'), ('mouse_LR_t', 'L_t')]),
      OrderedDict([('condition', 'incongruent_left'), ('photo', 'Images/incongruent_left.png'), ('corrAns', 'left'), ('mouse_LR', 'L'), ('mouse_LR_t', 'L_t')]),
      OrderedDict([('condition', 'congruent_right'), ('photo', 'Images/congruent_right.png'), ('corrAns', 'right'), ('mouse_LR', 'R'), ('mouse_LR_t', 'R_t')]),
      OrderedDict([('condition', 'incongruent_right'), ('photo', 'Images/incongruent_right.png'), ('corrAns', 'right'), ('mouse_LR', 'R'), ('mouse_LR_t', 'R_t')])]
    Routine Fixation
    Routine FlankerTask
  LoopTerminator Play
  Routine End
